'CR1000
'UBC Micromet
'June Skeeter
'Datalogger Program for CR 1000 - EC Tower
'Started Mar 14, 2023
'
'
'Output Tables
'FLUX : Fast turbulence sensors (CSAT3 / IRGA) at 20 Hz
'MET : Slow meteorological sensors (LI190, - possibly adding CR1 Radiometer and heat flux plates)
'SUMMARY : Daily Battery Status
'

SequentialMode

StationName(BBS) 'Burns Bog Seedling Reomoval Area

Public PRG_CNT
Public SYS_RealTime(9)

Public BattV
Public PTemp_C
Public PAR_Den
Public wind(5)
Public irga(5)

Alias wind(1) = Ux
Alias wind(2) = Uy
Alias wind(3) = Uz
Alias wind(4) = Ts
Alias wind(5) = sonic_diag
Alias irga(1) = CO2
Alias irga(2) = H2O
Alias irga(5) = press
Alias irga(4) = irga_diag


Units wind = m/s
Units Ts = C
Units sonic_diag = arb
Units CO2 = mg/m3
Units H2O = mg/m3
Units press = kPa
Units irga_diag = arb
Units BattV=Volts
Units PTemp_C=Deg C
Units PAR_Den=umol/s/m^2

'Define Data Tables
DataTable(MET,True,-1)
	DataInterval(0,30,Min,10)
  CardOut (0,-1)
    
	Average(1,PAR_Den,FP2,False)
EndTable

DataTable(SUMMARY,True,-1)
	DataInterval(0,1440,Min,10)
  CardOut (0,-1)
    
	Minimum(1,BattV,FP2,False,False)
EndTable

DataTable (FLUX,TRUE,-1)
    DataInterval (0,0,mSec,10)
    CardOut (0,-1)

    Sample (5,Ux,IEEE4)
    Sample (4,CO2,IEEE4)
EndTable

BeginProg
    SDMSpeed (60)
    Scan (50,mSec,3,0)
      CSAT3 (Ux,1,3,91,20)    
      CS7500 (CO2,1,7,6)
      CO2 = CO2*44
      H2O = H2O*0.018

      CallTable FLUX


     'Write a file mark to the turbulence time series table every 30 min
      If ( IfTime(0,30,Min) ) Then ( FileMark(FLUX) )

     RealTime(SYS_RealTime)
     If (SYS_RealTime(7) < 50000 AND ((SYS_Realtime(6) MOD 5) = 0)) Then (PRG_CNT = 0) 'less than 50 msec reset timing every 5 seconds


       If (PRG_CNT = 3)
      		'Default CR1000 Datalogger Battery Voltage measurement 'BattV'
  		   Battery(BattV)
       EndIf
       
       If (PRG_CNT = 4)
  
  		'Default CR1000 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    		PanelTemp(PTemp_C,250)
       EndIf
           
 			 If (PRG_CNT = 5)
    		'LI190R Quantum Sensor measurements 'PAR_Tot' and 'PAR_Den
      		VoltDiff(PAR_Den,1,mv2_5,1,True,0,250,1,0)
      		If PAR_Den<0 Then PAR_Den=0
      		'Calculate flux density
      		PAR_Den=PAR_Den*1655.629  
       EndIf
        

  		'Call Data Tables and Store Data
  		CallTable MET
  		CallTable SUMMARY

      PRG_CNT = PRG_CNT + 1 'increase counter for timing
                            
    NextScan
EndProg

